PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1280, 720]
  expName = Solo Project 2.0
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    PolygonComponent left_Red
      fillColor [set every repeat] = $color
      pos [set every repeat] = (pos, 0)
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'r', 'g'
      correctAns = $Expected_response
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine distr
    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    PolygonComponent left_Red1
      fillColor [set every repeat] = $color
      pos [set every repeat] = (pos, 0)
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp1
      allowedKeys = 'r', 'g'
      correctAns = $Expected_response
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Conditions.xlsx
      loopType = random
      nReps = 20
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      conditions:
        [{'color': 'red', 'pos': 300, 'Expected_response': 'r'},
        {'color': 'red', 'pos': -300, 'Expected_response': 'g'},
        {'color': 'green', 'pos': 300, 'Expected_response': 'g'},
        {'color': 'green', 'pos': -300, 'Expected_response': 'r'}]
      Routine trial
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = Conditions.xlsx
      loopType = random
      nReps = 20
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      conditions:
        [{'color': 'red', 'pos': 300, 'Expected_response': 'r'},
        {'color': 'red', 'pos': -300, 'Expected_response': 'g'},
        {'color': 'green', 'pos': 300, 'Expected_response': 'g'},
        {'color': 'green', 'pos': -300, 'Expected_response': 'r'}]
      Routine distr
    LoopTerminator trials_2
  LoopTerminator trials_3
